# Main Parameters
protocol.mA = 256                                    # tube current (in mA) (default: 200)
recon.kernelType = "standard"                       # 'soft', 'standard', 'bone' for kernels similar to those on clinical scanners

# Phantom
phantom.callback = "Phantom_Voxelized"              # name of function that reads and models phantom
phantom.projectorCallback = "C_Projector_Voxelized" # name of function that performs projection through phantom
phantom.filename = 'Phantom_Descriptor.json'        # phantom filename
phantom.centerOffset = [0.0, 0.0, 0.0]              # offset of phantom center relative to origin (in mm)
phantom.scale = 0.2                                 # re-scale the size of phantom

# Scan
protocol.viewsPerRotation = 200                     # total numbers of view per rotation (default: 1000)
protocol.viewCount = 200                            # total number of views in scan (default: 1000) [= viewsPerRotation]
protocol.stopViewId = 200 - 1                       # (default: 999) [= viewCount - 1]

# Recon
recon.fov = 350                                     # diameter of the reconstruction field-of-view (in mm)
recon.imageSize = 512                               # number of columns and rows to be reconstructed (square)
recon.sliceCount = 8                                # number of slices to reconstruct
recon.sliceThickness = 0.2                          # reconstruction inter-slice interval (in mm)
recon.centerOffset = [0.0,0.0,0.0]                 # reconstruction offset relative to center of rotation (in mm)